<CompuCell3D Revision="20171208" Version="3.7.7">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="512" y="128" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
<!--       <Boundary_x>Periodic</Boundary_x> -->
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="boid"/>
      <CellType Freeze="" TypeId="2" TypeName="wall"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="ExternalPotential">
      
      <!-- External force applied to cell. Each cell has different force and force components have to be managed in Python. -->
      <!-- e.g. cell.lambdaVecX=0.5; cell.lambdaVecY=0.1 ; cell.lambdaVecZ=0.3; -->
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="boid">10.0</Energy>
      <Energy Type1="Medium" Type2="wall">10.0</Energy>
      <Energy Type1="boid" Type2="boid">25.0</Energy>
      <Energy Type1="boid" Type2="wall">10.0</Energy>
      <Energy Type1="wall" Type2="wall">5.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   <Plugin Name="PixelTracker">
   
   <!-- Module tracking pixels of each cell -->
</Plugin>

   <Steppable Type="UniformInitializer">
   
   <!-- Initial layout of cells in the form of rectangular slab -->
   <Region>
      <BoxMin x="0" y="0" z="0"/>
      <BoxMax x="200" y="128" z="1"/>
      <Gap>0</Gap>
      <Width>8</Width>
      <Types>boid</Types>
   </Region>
</Steppable>

   <Steppable Type="BlobInitializer">
   
   <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
         <Region>
         <Center x="256" y="64" z="0"/>
         <Radius>32</Radius>
         <Gap>0</Gap>
         <Width>2</Width>
         <Types>wall</Types>
      </Region>
</Steppable>

<!--    <Steppable Type="BlobInitializer"> -->
      
      
<!--       <Region> -->
<!--          <Center x="128" y="128" z="0"/> -->
<!--          <Radius>110</Radius> -->
<!--          <Gap>0</Gap> -->
<!--          <Width>10</Width> -->
<!--          <Types>wall</Types> -->
<!--       </Region> -->
<!--       <Region> -->
<!--          <Center x="128" y="128" z="0"/> -->
<!--          <Radius>105</Radius> -->
<!--          <Gap>0</Gap> -->
<!--          <Width>10</Width> -->
<!--          <Types>Medium</Types> -->
<!--       </Region> -->
<!--       <Region> -->
<!--          <Center x="128" y="128" z="0"/> -->
<!--          <Radius>100</Radius> -->
<!--          <Gap>1</Gap> -->
<!--          <Width>8</Width> -->
<!--          <Types>boid</Types> -->
<!--       </Region> -->
      
<!--    </Steppable> -->
</CompuCell3D>
