<CompuCell3D Revision="20171208" Version="3.7.7">
   
<!--    <Potts> -->
      
      
<!--       <Dimensions x="100" y="100" z="1"/> -->
<!--       <Steps>100000</Steps> -->
<!--       <Temperature>10.0</Temperature> -->
<!--       <NeighborOrder>1</NeighborOrder> -->
<!--       <Boundary_x>Periodic</Boundary_x> -->
<!--       <Boundary_y>Periodic</Boundary_y> -->
<!--    </Potts> -->
<Potts>
   
   
   <Dimensions x="50" y="50" z="50"/>
   <Steps>100000</Steps>
   <Temperature>10.0</Temperature>
   <NeighborOrder>1</NeighborOrder>
<!--      <LatticeType>Hexagonal</LatticeType>   -->
<!--    <Boundary_x>Periodic</Boundary_x> -->
<!--    <Boundary_y>Periodic</Boundary_y> -->
</Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="cell"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="PixelTracker">
      
      <!-- Module tracking pixels of each cell -->
   </Plugin>
   
   <Plugin Name="BoundaryPixelTracker">
      
      <!-- Module tracking boundary pixels of each cell -->
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="cell">10.0</Energy>
      <Energy Type1="cell" Type2="cell">10.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   
   
<!--    <Steppable Type="BlobInitializer"> -->
   
<!--        <Region> -->
<!--           <Center x="25" y="25" z="25"/> -->
<!--           <Radius>20</Radius> -->
<!--           <Gap>0</Gap> -->
<!--           <Width>5</Width> -->
<!--           <Types>cell</Types> -->
<!--        </Region> -->
<!--     </Steppable> -->

    <Steppable Type="UniformInitializer"> 
      

       <Region> 
          <BoxMin x="0" y="0" z="0"/> 
          <BoxMax x="50" y="50" z="50"/> 
          <Gap>0</Gap> 
          <Width>10</Width> 
          <Types>cell</Types> 
     </Region> 
  </Steppable> 
</CompuCell3D>
