<CompuCell3D Revision="20180722" Version="3.7.8">
   <Potts>
      <Dimensions x="254" y="254" z="1"/>
      <Steps>1000000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="boidsA"/>
   </Plugin>
   <Plugin Name="Volume"/>
   <Plugin Name="ExternalPotential">
      <Algorithm>PixelBased</Algorithm>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="NeighborTracker"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="boidsA">10.0</Energy>
      <Energy Type1="boidsA" Type2="boidsA">5.0</Energy>
      <NeighborOrder>3</NeighborOrder>
   </Plugin>
   <Steppable Type="BlobInitializer">
      <Region>
         <Center x="127" y="127" z="0"/>
         <Radius>100</Radius>
         <Gap>5</Gap>
         <Width>8</Width>
         <Types>boidsA</Types>
      </Region>
   </Steppable>
</CompuCell3D>
